#  *********************************************************************
#  * DISCLAIMER                                                        *
#  *                                                                   *
#  * Neither the authors of this software system, nor their employing  *
#  * institutes, nor the agencies providing financial support for this *
#  * work make any representation or warranty, express or implied,     *
#  * regarding this software system or assume any liability for its    *
#  * use.                                                              *
#  *                                                                   *
#  * This code implementation is the intellectual property of the      *
#  * OpenGATE collaboration.                                           *
#  * By copying, distributing or modifying the Program (or any work    *
#  * based on the Program) you indicate your acceptance of this        *
#  * statement, and all its terms.                                     *
#  *********************************************************************


# V I S U A L I S A T I O N
#####
#/vis/disable
/control/execute vis.mac

# M A N D A T O R Y
#####
/gate/geometry/setMaterialDatabase ./GateMaterials.db


# G E O M E T R Y
#####

# World
# Define the world dimensions
##
/gate/world/geometry/setXLength 100 cm
/gate/world/geometry/setYLength 100 cm
/gate/world/geometry/setZLength 100 cm

# Scanner Head
# Create a new box representing the main head-volume
# SPECThead is the name of the predefined SPECT system
# Create the SPECT system, which will yield an Interfile output of projection data
##
/gate/world/daughters/name SPECThead
/gate/world/daughters/insert box
/gate/SPECThead/geometry/setXLength  7. cm
/gate/SPECThead/geometry/setYLength 21. cm
/gate/SPECThead/geometry/setZLength 30. cm
/gate/SPECThead/placement/setTranslation  20.0 0. 0. cm
/gate/SPECThead/setMaterial Air
/gate/SPECThead/repeaters/insert ring
/gate/SPECThead/ring/setRepeatNumber 2
/gate/SPECThead/moves/insert orbiting
/gate/SPECThead/orbiting/setSpeed 0.15 deg/s
/gate/SPECThead/orbiting/setPoint1 0 0 0 cm
/gate/SPECThead/orbiting/setPoint2 0 0 1 cm
/gate/SPECThead/vis/setVisible 0


# CRYSTAL
# Create the crystal volume
##
/gate/SPECThead/daughters/name crystal
/gate/SPECThead/daughters/insert box
/gate/crystal/geometry/setXLength 1. cm
/gate/crystal/geometry/setYLength  19. cm
/gate/crystal/geometry/setZLength  28. cm
/gate/crystal/placement/setTranslation  0. 0. 0. cm
/gate/crystal/setMaterial NaI
/gate/crystal/vis/setColor yellow
/gate/crystal/vis/setVisible 0



# S Y S T E M
######
# The system acts as an interpretor between the GATE geometry and data outputs for reconstruction 
# in our case, the Interfile writer
# A system must know which components of the geometry are parts of the scanner, and what 
# their role are.
# For the moment, there is only a system SPECThead, which was built when the SPECThead volume
# was inserted. 
# The SPECThead system is made of three levels: base (for the head), crystal (for the crystal and crystal matrix) 
# and pixel (for individual crystals for pixellated gamma camera)
# For now, only the base of the system is attached to a volume: the volume SPECThead
# For the system to get information about your crystal, the level crystal must be attached to the volume 
# that has been defined for the scintillating crystal (crystal)
##

/gate/systems/SPECThead/crystal/attach crystal
/gate/systems/SPECThead/describe


# S E N S I T I V E   D E T E C T O R S
######
# GATE provides two sensitive detectors, which have two different functions
# Using them properly is very important for getting accurate results
##

# Crystal SD
#
# The crystal SD makes it possible to record hits in a sensitive volume (e.g.,. in a scintillation crystal)
# It must be attached to any volume for which hit-data must be obtained
# For recording hits in the NaI volume only, the name of which is crystal, this volume is attached 
# to the crystal SD
##

/gate/crystal/attachCrystalSD


#  P H Y S I C S
#####
/gate/physics/addProcess PhotoElectric
/gate/physics/processes/PhotoElectric/setModel StandardModel

/gate/physics/addProcess Compton
/gate/physics/processes/Compton/setModel PenelopeModel

/gate/physics/addProcess RayleighScattering
/gate/physics/processes/RayleighScattering/setModel PenelopeModel

/gate/physics/addProcess ElectronIonisation
/gate/physics/processes/ElectronIonisation/setModel StandardModel e-

/gate/physics/addProcess Bremsstrahlung
/gate/physics/processes/Bremsstrahlung/setModel StandardModel e-

/gate/physics/addProcess MultipleScattering e-

/gate/physics/processList Enabled
/gate/physics/processList Initialized

#  C U T S
#####
# Cuts for particle in WORLD
##
/gate/physics/Gamma/SetCutInRegion      SPECThead 0.1 cm
/gate/physics/Electron/SetCutInRegion   SPECThead 1.0 cm


# I N I T I A L I Z A T I O N
#####

/gate/run/initialize

/control/execute secondPart.mac
